PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = method_of_constant_stimuli
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = raisedCos
      phase [set every repeat] = 360*np.random.rand()
      sf = 1
      size = (0.25, 0.25)
      startVal [time (s)] = $np.random.rand()*.15+.1
      stopVal [duration (s)] = .5
      tex = sin
      texture resolution = 512
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    PolygonComponent stimulus_window
      fillColor = none
      lineColor = black
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (.5,.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.75
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    PolygonComponent polygon
      fillColor = none
      lineColor = green
      lineWidth = 10
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.75
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial, a grating might appear in the circle. When the circle turns green, you should press up if there was a grating and down if there was no stimulus.

        Press the space bar to begin.
    KeyboardComponent start_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = yes_no_conditions.csv
    loopType = random
    nReps = 30
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    conditions:
      [OrderedDict([('contrast', 0.0)]),
      OrderedDict([('contrast', 1e-09)]),
      OrderedDict([('contrast', 1e-07)]),
      OrderedDict([('contrast', 1e-05)]),
      OrderedDict([('contrast', 0.001)]),
      OrderedDict([('contrast', 0.01)]),
      OrderedDict([('contrast', 0.1)]),
      OrderedDict([('contrast', 1.0)])]
    Routine trial
  LoopTerminator trials
